PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = Word priming Exp
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine trial
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    TextComponent StudyText
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $Study_Word
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    SliderComponent Studyslider
      forceEndRoutine = True
      granularity = 0
      labels = "Familiar","Unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine Routine2
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    TextComponent TestText
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10
      text [set every repeat] = $test_word
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    TextboxComponent test_textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0
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    TextComponent submit_text
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0
      text = Click to Submit
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    MouseComponent testmouse
      clickable = $submit_text
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Studysheet.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Study_Word', 'Apple')]),
      OrderedDict([('Study_Word', 'River')]),
      OrderedDict([('Study_Word', 'Friend')]),
      OrderedDict([('Study_Word', 'Storm')]),
      OrderedDict([('Study_Word', 'Dance')]),
      OrderedDict([('Study_Word', 'Ocean')]),
      OrderedDict([('Study_Word', 'Light')]),
      OrderedDict([('Study_Word', 'Fear')]),
      OrderedDict([('Study_Word', 'Magic')]),
      OrderedDict([('Study_Word', 'Window')]),
      OrderedDict([('Study_Word', 'Candle')]),
      OrderedDict([('Study_Word', 'Journey')]),
      OrderedDict([('Study_Word', 'Puzzle')]),
      OrderedDict([('Study_Word', 'Whisper')]),
      OrderedDict([('Study_Word', 'Garden')])]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = Prime_Words_Test_List.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('test_word', 'A__le'), ('Reference', 'Apple'), ('old_new', 'old')]),
      OrderedDict([('test_word', 'R_ve_'), ('Reference', 'River'), ('old_new', 'old')]),
      OrderedDict([('test_word', 'F_ie_d'), ('Reference', 'Friend'), ('old_new', 'old')]),
      OrderedDict([('test_word', 'St_rm'), ('Reference', 'Storm'), ('old_new', 'old')]),
      OrderedDict([('test_word', 'Da_ce'), ('Reference', 'Dance'), ('old_new', 'old')]),
      OrderedDict([('test_word', 'Oc__n'), ('Reference', 'Ocean'), ('old_new', 'old')]),
      OrderedDict([('test_word', 'Li_ht'), ('Reference', 'Light'), ('old_new', 'old')]),
      OrderedDict([('test_word', '_ear'), ('Reference', 'Fear'), ('old_new', 'old')]),
      OrderedDict([('test_word', 'M_gic'), ('Reference', 'Magic'), ('old_new', 'old')]),
      OrderedDict([('test_word', 'Wi_do_'), ('Reference', 'Window'), ('old_new', 'old')]),
      OrderedDict([('test_word', 'Ca_dle'), ('Reference', 'Candle'), ('old_new', 'old')]),
      OrderedDict([('test_word', 'J_urn_y'), ('Reference', 'Journey'), ('old_new', 'old')]),
      OrderedDict([('test_word', 'Pu_zz_'), ('Reference', 'Puzzle'), ('old_new', 'old')]),
      OrderedDict([('test_word', 'Wh_sp_r'), ('Reference', 'Whisper'), ('old_new', 'old')]),
      OrderedDict([('test_word', 'G_rd_n'), ('Reference', 'Garden'), ('old_new', 'old')]),
      OrderedDict([('test_word', 'P_nc_l'), ('Reference', 'Pencil'), ('old_new', 'new')]),
      OrderedDict([('test_word', 'V_se'), ('Reference', 'Vase'), ('old_new', 'new')]),
      OrderedDict([('test_word', 'B_tt_e'), ('Reference', 'Bottle'), ('old_new', 'new')])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
    Routine Routine2
  LoopTerminator trials_2
